WorkflowBuilder(Version=2.4.0-preview)
Bonsai.Shaders.RenderFrame
-> GroupWorkflow ViewMatrix
    WorkflowInput Source1
    -> Bonsai.Shaders.AspectRatio
    -> Multiply(Operand=FloatProperty(Value=2))
    -> InputMapping(Width)
    -> Bonsai.Shaders.CreateOrthographic(Width=3, Height=2, NearClip=0, FarClip=100)
    -> WorkflowOutput
-> PublishSubject Draw

Bonsai.Numerics.CreateRandom(Seed=nil)
-> AsyncSubject Random

Bonsai.Uvc.DeviceCapture(Index=2, Width=640, Height=480, ColorFormat=Color, AutoExposure=Manual, ExposureTime=258)
-> MemberSelector(Selector=Image)
-> Bonsai.Vision.Undistort(ImageSize=nil, Alpha=0, FocalLength(X=100, Y=100), PrincipalPoint(X=320, Y=240), RadialDistortion(X=-0.02, Y=0, Z=0), TangentialDistortion(X=0, Y=0))
-> PublishSubject World

Bonsai.Uvc.DeviceCapture(Index=1, Width=400, Height=400, ColorFormat=Grayscale, AutoExposure=nil, ExposureTime=nil) => #5
-> MemberSelector(Selector=Image) => #6
SubscribeSubject PupilThreshold
-> Accumulate
-> ExternalizedProperty(MemberName=ThresholdValue) => #14
#6, #14 -> Bonsai.Vision.Threshold(ThresholdValue=25, MaxValue=255, ThresholdType=BinaryInv) => #12
-> GroupWorkflow PupilTracking => #27
    WorkflowInput Source1
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=50, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> WorkflowOutput
#27, #12, #5 -> Zip
-> PublishSubject Pupil

Bonsai.Shaders.Input.KeyDown
-> MemberSelector(Selector=EventArgs.Key)
-> Equal(Operand=WorkflowPropertyOfKey(Value=Escape))
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> First
-> WorkflowOutput

IntProperty(Value=0)
-> BehaviorSubject PupilThreshold

Defer StartScreen
    SubscribeSubject Draw => #0
    ExternalizedProperty TextureName(MemberName=TextureName) => #3
    Bonsai.Shaders.Input.MouseDown => #5
    GroupWorkflow FullWidth
        Bonsai.Shaders.UpdateFrame
        -> Bonsai.Shaders.AspectRatio
        -> Multiply(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> ExternalizedProperty(MemberName=SizeX) => #4
    #0, #3, #4 -> IncludeWorkflow(Path=Extensions\DrawSprite, TextureName=Start, LocationX=0, LocationY=0, SizeX=1.5, SizeY=1) => #7
    #7, #5 -> TakeUntil
    -> LastOrDefault
    -> WorkflowOutput
-> SelectMany PupilCalibration
    SubscribeSubject Pupil
    -> MemberSelector(Selector="Item2,Item3.Image")
    -> Add
    -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgr)
    -> Bonsai.Vision.Resize(Size(Width=640, Height=480), Interpolation=Linear) => #12
    SubscribeSubject World => #7
    #7, #12 -> WithLatestFrom
    -> Bonsai.Dsp.Concat(Axis=1)
    -> Bonsai.Shaders.UpdateTexture(TextureName=Video, InternalFormat=Rgba)
    -> PublishSubject FrameReady

    SubscribeSubject Draw => #2
    Bonsai.Shaders.Input.MouseDown
    -> Condition RightClick => #23
        WorkflowInput Source1
        -> MemberSelector(Selector=EventArgs.Button)
        -> Equal(Operand=WorkflowPropertyOfMouseButton(Value=Right))
        -> WorkflowOutput
    SubscribeSubject FrameReady => #15
    #2, #15 -> SkipUntil => #13
    GroupWorkflow FullWidth
        Bonsai.Shaders.UpdateFrame
        -> Bonsai.Shaders.AspectRatio
        -> Multiply(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> ExternalizedProperty(MemberName=SizeX) => #6
    #13, #6 -> IncludeWorkflow(Path=Extensions\DrawSprite, TextureName=Video, LocationX=0, LocationY=0, SizeX=1.5, SizeY=-1) => #21
    #21, #23 -> TakeUntil
    -> LastOrDefault
    -> WorkflowOutput

    Bonsai.Shaders.Input.MouseMove
    -> Condition Drag
        WorkflowInput Source1
        -> MemberSelector(Selector=EventArgs.Mouse.LeftButton)
        -> Equal(Operand=WorkflowPropertyOfButtonState(Value=Pressed))
        -> WorkflowOutput
    -> MemberSelector(Selector=EventArgs.XDelta)
    -> MulticastSubject PupilThreshold
-> SelectMany GazeCalibration
    SubscribeSubject World
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Aruco.DetectMarkers(ThresholdMethod=AdaptiveThreshold, Param1=7, Param2=7, MinSize=0.04, MaxSize=0.5, CornerRefinement=Lines, MarkerSize=10)
    -> Bonsai.Aruco.SelectMarker(Id=242)
    -> PublishSubject CalibrationTarget

    Bonsai.IO.GetFiles(Path=Movies, SearchPattern=*.avi, SearchOption=TopDirectoryOnly) => #9
    SubscribeSubject Random => #10
    #9, #10 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression: Item1[Item2.Next(Item1.Length)]
    -> ExternalizedProperty(MemberName=FileName)
    -> Bonsai.Vision.FileCapture(FileName=Movies\video.avi, PlaybackRate=10000, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true)
    -> ToArray => #7
    Unit
    -> Timestamp
    -> Format
      Format={0}-{1:d2}-{2:d2}T{3:d2}_{4:d2}_{5:d2}
      Selector="Timestamp.DateTime.Year,Timestamp.DateTime.Month,Timestamp.DateTime.Day,Timestamp.DateTime.Hour,Timestamp.DateTime.Minute,Timestamp.DateTime.Second"
    -> AsyncSubject FileName => #18
    SubscribeSubject FileName
    -> Format(Format=Data\{0}\{0}-calibration.csv)
    -> ExternalizedProperty(MemberName=FileName) => #17
    ExternalizedProperty TargetPositions(MemberName=TargetPositions)
    -> GroupWorkflow CalibrationTrial
        SubscribeSubject Draw => #0
        SubscribeSubject CalibrationTarget => #5
        SubscribeSubject Pupil
        -> MemberSelector(Selector=Item1) => #12
        #5, #12 -> WithLatestFrom
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1.Area)
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> Skip(Count=10)
        -> Condition ValidPupil
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.Area)
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> PublishSubject TargetFound
        -> MemberSelector(Selector="Item1.Center,Item2.Centroid") => #13
        FloatProperty(Value=0)
        -> DelaySubscription(DueTime=PT0.25S)
        -> Bonsai.Shaders.UpdateUniform(UniformName=bias, ShaderName=Target) => #16
        SubscribeSubject Target
        -> MemberSelector(Selector=Position.X)
        -> ExternalizedProperty(MemberName=LocationX) => #2
        SubscribeSubject Target
        -> MemberSelector(Selector=Position.Y)
        -> ExternalizedProperty(MemberName=LocationY) => #3
        #0, #2, #3 -> IncludeWorkflow(Path=Extensions\DrawTarget, LocationX=0.85, LocationY=0.8, SizeX=0.1, SizeY=0.1, Angle=0)
        -> Take(Count=60)
        -> LastOrDefault
        -> DelaySubscription(DueTime=PT0.5S) => #4
        #13, #4 -> TakeUntil
        -> ToArray
        -> Condition NonEmpty
            WorkflowInput Source1
            -> MemberSelector(Selector=Length)
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> AverageCorrespondence => #11
        SubscribeSubject End
        -> Bonsai.Scripting.ExpressionCondition => #32
          Expression: it == null
        ExternalizedProperty TargetPositions(MemberName=TargetPositions)
        -> CreateTarget
          TargetPositions
            PointF(X=-0.85, Y=-0.8)
            PointF(X=-0.85, Y=0.8)
            PointF(X=0.85, Y=0.8)
            PointF(X=0.85, Y=-0.8)
            PointF(X=0, Y=0)
            PointF(X=0, Y=0)
            PointF(X=0.5, Y=0.5)
            PointF(X=0.5, Y=-0.5)
            PointF(X=-0.5, Y=-0.5)
            PointF(X=-0.5, Y=0.5)
        -> BehaviorSubject Target => #23
        #23, #16 -> Zip
        -> FirstOrDefault
        -> BehaviorSubject End => #29
        #11, #29 -> SubscribeWhen
        -> Sink TargetHit
            SubscribeSubject TargetFound
            -> Take(Count=1) => #6
            -> FloatProperty(Value=0.5)
            -> Bonsai.Shaders.UpdateUniform(UniformName=bias, ShaderName=Target)
            SubscribeSubject Target => #3
            #6, #3 -> CombineLatest
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Scripting.ExpressionCondition
              Expression: it != null
            -> Bonsai.Scripting.ExpressionSink
              Expression: Hit()
        -> Repeat => #24
        #24, #32 -> TakeUntil
        -> WorkflowOutput
    -> Bonsai.Scripting.ExpressionTransform => #21
      Expression:
        new(
        Item1 as Target,
        Item2 as Pupil)
    #21, #17 -> Bonsai.IO.CsvWriter(FileName="", Delimiter=",", Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)
    -> MemberSelector(Selector="Target,Pupil")
    -> ToArray
    -> ModelUpdate => #1
    #18, #1, #7 -> Zip
    -> Bonsai.Scripting.ExpressionTransform => #23
      Expression:
        new(
        Item1 as FileName,
        Item2 as Model,
        Item3 as Frames)
    Bonsai.Shaders.Input.MouseDown
    -> Condition RightClick => #31
        WorkflowInput Source1
        -> MemberSelector(Selector=EventArgs.Button)
        -> Equal(Operand=WorkflowPropertyOfMouseButton(Value=Right))
        -> WorkflowOutput
    #23, #31 -> TakeUntil
    -> WorkflowOutput
-> SelectMany MoviePlayback
    WorkflowInput Source1
    -> AsyncSubject Calibration
    -> MemberSelector(Selector=FileName) => #47
    SubscribeSubject World
    -> Slice(Start=0, Step=1, Stop=nil) => #34
    SubscribeSubject Pupil => #2
    SubscribeSubject Calibration
    -> MemberSelector(Selector=Frames)
    -> Merge => #13
    SubscribeSubject Calibration
    -> MemberSelector(Selector=Frames) => #42
    #34, #42 -> SkipUntil => #12
    SubscribeSubject Calibration
    -> MemberSelector(Selector=Model) => #43
    #2, #43 -> CombineLatest => #9
    #12, #9 -> WithLatestFrom => #10
    #13, #10 -> Zip => #8
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Shaders.UpdateTexture(TextureName=Video, InternalFormat=Rgba)
    -> PublishSubject FrameReady => #31
    #8 -> MemberSelector(Selector=Item2.Item1) => #17
    #8 -> MemberSelector(Selector=Item2.Item2.Item1.Item3.Image) => #20
    #8 -> GroupWorkflow PupilPosition => #50
        WorkflowInput Source1
        -> MemberSelector(Selector="Item2.Item2.Item1.Item1,Item2.Item2.Item2")
        -> WorkflowOutput
    SubscribeSubject Calibration
    -> MemberSelector(Selector=FileName)
    -> Format(Format=Data\{0}\{0}-gaze.csv)
    -> ExternalizedProperty(MemberName=FileName) => #23
    SubscribeSubject Calibration
    -> MemberSelector(Selector=FileName)
    -> Format(Format=Data\{0}\{0}-world.avi)
    -> ExternalizedProperty(MemberName=FileName) => #25
    #17, #25 -> Bonsai.Vision.VideoWriter(FileName="", Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor) => #18
    SubscribeSubject Calibration
    -> MemberSelector(Selector=FileName)
    -> Format(Format=Data\{0}\{0}-pupil.csv)
    -> ExternalizedProperty(MemberName=FileName) => #37
    #50, #37 -> Bonsai.IO.CsvWriter
      FileName=""
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true
      Selector="Item1.Centroid,Item1.MajorAxisLength,Item1.MinorAxisLength,Item1.Area"
    -> MemberSelector(Selector="Item1.Centroid,Item2")
    -> ModelPredict => #3
    #3, #23 -> Bonsai.IO.CsvWriter(FileName="", Delimiter=",", Append=false, Overwrite=false, Suffix=None, IncludeHeader=true) => #19
    #31, #19, #18, #20 -> Zip
    -> MemberSelector(Selector=Item4)
    -> ToArray => #22
    #47, #22 -> Zip
    -> WorkflowOutput

    SubscribeSubject Draw => #14
    SubscribeSubject FrameReady => #32
    #14, #32 -> SkipUntil => #33
    GroupWorkflow FullWidth
        Bonsai.Shaders.UpdateFrame
        -> Bonsai.Shaders.AspectRatio
        -> Multiply(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> ExternalizedProperty(MemberName=SizeX) => #15
    #33, #15 -> IncludeWorkflow(Path=Extensions\DrawSprite, TextureName=Video, LocationX=0, LocationY=0, SizeX=1.5, SizeY=-1)
-> SelectMany Replay
    WorkflowInput Source1
    -> AsyncSubject Input

    SubscribeSubject Draw => #8
    SubscribeSubject FrameReady => #20
    #8, #20 -> SkipUntil => #19
    GroupWorkflow FullWidth
        Bonsai.Shaders.UpdateFrame
        -> Bonsai.Shaders.AspectRatio
        -> Multiply(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> ExternalizedProperty(MemberName=SizeX) => #9
    #19, #9 -> IncludeWorkflow(Path=Extensions\DrawSprite, TextureName=Video, LocationX=0, LocationY=0, SizeX=1.5, SizeY=-1)

    SubscribeSubject Input
    -> MemberSelector(Selector=Item1)
    -> Format(Format=Data\{0}\{0}-world.avi)
    -> ExternalizedProperty(MemberName=FileName)
    -> Bonsai.Vision.FileCapture(FileName="", PlaybackRate=0, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true)
    -> DelaySubscription(DueTime=PT1.5S) => #46
    SubscribeSubject Input
    -> MemberSelector(Selector=Item2)
    -> Merge
    -> Bonsai.Dsp.ConvertScale(Depth=nil, Scale=2.5, Shift=0)
    -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgr) => #16
    SubscribeSubject Input
    -> MemberSelector(Selector=Item1)
    -> Format(Format=Data\{0}\{0}-gaze.csv)
    -> ExternalizedProperty(MemberName=FileName)
    -> Bonsai.IO.CsvReader(FileName="", Delimiter="", ScanPattern="%f,%f", SkipRows=1)
    -> DelaySubscription(DueTime=PT0.3S)
    -> InputMapping(X(selector=Item1), Y(selector=Item2))
    -> Bonsai.Vision.CreatePoint2f(X=203.0574, Y=260.3494) => #29
    #46, #29 -> Zip
    -> DrawGazeTarget(Radius=3, Thickness=2) => #27
    SubscribeSubject Input
    -> MemberSelector(Selector=Item1)
    -> Format(Format=Data\{0}\{0}-pupil.csv)
    -> ExternalizedProperty(MemberName=FileName)
    -> Bonsai.IO.CsvReader(FileName="", Delimiter="", ScanPattern="%f,%f,%f,%f,%f", SkipRows=1)
    -> DelaySubscription(DueTime=PT0.3S)
    -> InputMapping(X(selector=Item1), Y(selector=Item2))
    -> Bonsai.Vision.CreatePoint2f(X=85.05426, Y=127.1346) => #36
    #16, #36 -> Zip
    -> DrawGazeTarget(Radius=3, Thickness=-1)
    -> Bonsai.Vision.Resize(Size(Width=640, Height=480), Interpolation=Linear) => #17
    #27, #17 -> Zip
    -> Bonsai.Dsp.Concat(Axis=1)
    -> Bonsai.Shaders.UpdateTexture(TextureName=Video, InternalFormat=Rgba)
    -> PublishSubject FrameReady
    -> Repeat => #41
    Bonsai.Shaders.Input.MouseDown
    -> Take(Count=1) => #49
    -> Condition LeftClick
        WorkflowInput Source1
        -> MemberSelector(Selector=EventArgs.Button)
        -> Equal(Operand=WorkflowPropertyOfMouseButton(Value=Left))
        -> WorkflowOutput
    -> Unit => #51
    #49 -> Condition RightClick
        WorkflowInput Source1
        -> MemberSelector(Selector=EventArgs.Button)
        -> Equal(Operand=WorkflowPropertyOfMouseButton(Value=Right))
        -> WorkflowOutput
    -> SelectMany SaveRawVideo
        WorkflowInput Source1

        SubscribeSubject Input
        -> MemberSelector(Selector=Item2)
        -> Merge
        -> Bonsai.Dsp.ConvertScale(Depth=nil, Scale=2, Shift=0)
        -> Bonsai.Vision.Smooth(SmoothType=Gaussian, Size1=5, Size2=0, Sigma1=0, Sigma2=0) => #4
        SubscribeSubject Input
        -> MemberSelector(Selector=Item1)
        -> Format(Format=Data\{0}\{0}-pupil.avi)
        -> ExternalizedProperty(MemberName=FileName) => #6
        #4, #6 -> Bonsai.Vision.VideoWriter(FileName="", Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)
        -> WorkflowOutput
    -> Unit => #47
    #51, #47 -> Merge
    -> LastOrDefault => #48
    #41, #48 -> TakeUntil
    -> LastOrDefault
    -> WorkflowOutput
-> SelectMany EndScreen
    SubscribeSubject Draw => #0
    ExternalizedProperty TextureName(MemberName=TextureName) => #4
    ExternalizedProperty DueTime(MemberName=DueTime)
    -> Timer(DueTime=PT10S, Period=PT0S) => #6
    GroupWorkflow FullWidth
        Bonsai.Shaders.UpdateFrame
        -> Bonsai.Shaders.AspectRatio
        -> Multiply(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> ExternalizedProperty(MemberName=SizeX) => #5
    #0, #4, #5 -> IncludeWorkflow(Path=Extensions\DrawSprite, TextureName=End, LocationX=0, LocationY=0, SizeX=1.5, SizeY=1) => #8
    #8, #6 -> TakeUntil
    -> Last
    -> WorkflowOutput
-> Repeat
